CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Media>.+)-T(?P<Day>[0-9]+)-(?P<Treatment>.+)-R(?P<Replicate>[0-9])-Q(?P<Quadrant>-[1-5])-(?P<Channel>.+).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the color image by matching files in the folder against the text ‘6-1.jpg’. Load the template image as a binary mask. See details on the pipeline protocol at http://www.cellprofiler.org/linked_files/Papers/31-Vokes_CurrentProtocols_2008.pdf.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "photo")
    Name to assign these images:PhotoOrig
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "mask")
    Name to assign these images:MaskOrig
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Channel

MaskImage:[module_num:5|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notes:['Do not consider colonies outside of the masked region reference image.  The masked region reference image was interactively created earlier using FIJI.']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
    Select the input image:PhotoOrig
    Name the output image:PhotoMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:MaskOrig
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:6|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notes:['Identifies all objects (including colonies, glares, and other irregularities) on the plate but does not split clumped objects.']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
    Select the input image:PhotoMasked
    Name the primary objects to be identified:ColoniesWithArtifactsUnsplit
    Typical diameter of objects, in pixel units (Min,Max):3,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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notes:['Identifies all objects (including colonies, glares, and other irregularities) on the plate and splits these objects by shape.']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
    Select the input image:PhotoMasked
    Name the primary objects to be identified:ColoniesWithArtifacts
    Typical diameter of objects, in pixel units (Min,Max):3,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:8|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notes:['Measure object features to identify measurements that can be used to distinguish colonies from artifacts.']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
    Select object sets to measure:ColoniesWithArtifacts, ColoniesWithArtifactsUnsplit
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['Separate artifacts from the colonies using measurement ranges identified from the previous measure module.']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
    Select the objects to filter:ColoniesWithArtifactsUnsplit
    Name the output objects:Artifacts
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:ColoniesUnsplit
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:15.0
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
MaskObjects:[module_num:10|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notes:['Remove artifacts to keep split colonies.']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
    Select objects to be masked:ColoniesWithArtifacts
    Name the masked objects:Colonies
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ColoniesUnsplit
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:11|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notes:['Again measure object features to confirm measurements that distinguish colonies from artifacts.']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
    Select object sets to measure:Artifacts, Colonies, ColoniesUnsplit
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:12|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notes:['Outline identified colonies on the original image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:PhotoOrig
    Name the output image:PhotoOutlinesOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#21FF06
    Select objects to display:Colonies

SaveImages:[module_num:13|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notes:['Save the image of outlined colonies on the original image.']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
    Select the type of image to save:Image
    Select the image to save:PhotoOutlinesOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:PhotoOrig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|immunology/papers/colony-counting/results/02-images-colonies-overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

OverlayObjects:[module_num:14|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
    Input:PhotoOrig
    Name the output image:PhotoObjectsOverlay
    Objects:Colonies
    Opacity:0.3

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:PhotoObjectsOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:PhotoOrig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-objects
    Saved file format:png
    Output file location:Default Output Folder sub-folder|immunology/papers/colony-counting/results/02-images-colonies-overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ConvertObjectsToImage:[module_num:16|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
    Select the input objects:ColoniesWithArtifactsUnsplit
    Name the output image:ObjectsColoniesWithArtifactsUnsplit
    Select the color format:uint16
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:ObjectsColoniesWithArtifactsUnsplit
    Select method for constructing file names:From image filename
    Select image name for file prefix:MaskOrig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:-objects
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|immunology/papers/colony-counting/results/02-images-colonies-overlay
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:18|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notes:['Save the measurements.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|immunology/papers/colony-counting/results/02-spreadsheet-counts
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:19|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|immunology/papers/colony-counting/results/02-cellprofiler-analyst
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:ColonyCountDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:PhotoOrig
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:ColonyCount
    Which objects should be used for locations?:Colonies
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:ColonyOrArtifact
    Export object relationships?:No
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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