CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it.', '—', 'Load the color image by matching files in the folder against the text ‘6-1.jpg’. Load the template image as a binary mask. See details on the pipeline protocol at http://www.cellprofiler.org/linked_files/Papers/31-Vokes_CurrentProtocols_2008.pdf.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith ".tif")
    Name to assign these images:OrigColor
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".jpg")
    Name to assign these images:PlateTemplate
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MaskImage:[module_num:5|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notes:['Do the same for the red channel.']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
    Select the input image:OrigColor
    Name the output image:MaskedRedPlate
    Use objects or an image as a mask?:Image
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    Select image for mask:PlateTemplate
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:6|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notes:['Identifies all objects (including colonies, glares, and other irregularities) on the plate and splits these objects by shape. Saves the objects as ‘SplitColoniesWithGlare’.']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
    Select the input image:MaskedRedPlate
    Name the primary objects to be identified:SplitColoniesWithGlare
    Typical diameter of objects, in pixel units (Min,Max):3,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

IdentifyPrimaryObjects:[module_num:7|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notes:['Identifies all objects (including colonies, glares, and other irregularities) on the plate but does not split clumped objects. Saves the objects as ‘ColoniesWithGlare’.']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
    Select the input image:MaskedRedPlate
    Name the primary objects to be identified:ColoniesWithGlare
    Typical diameter of objects, in pixel units (Min,Max):3,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:10
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:8|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notes:['Measure area and shape features of ‘Colonies with Glare’ in order to record measurements that can be used to distinguish colonies from irregularities.']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
    Select object sets to measure:ColoniesWithGlare
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['Separates irregularities from the plate colonies by creating a filter based on the Eccentricity and MinorAxisLength measurements obtained from the previous module.']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
    Select the objects to filter:ColoniesWithGlare
    Name the output objects:Glare
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:Yes
    Name the objects removed by the filter:ColoniesWithoutGlare
    Select the measurement to filter by:AreaShape_Eccentricity
    Filter using a minimum measurement value?:Yes
    Minimum value:0.8
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MinorAxisLength
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:15.0

MaskObjects:[module_num:10|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
    Select objects to be masked:SplitColoniesWithGlare
    Name the masked objects:SplitColoniesWithoutGlare
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ColoniesWithoutGlare
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    Handling of objects that are partially masked:Remove
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:SplitColoniesWithoutGlare|Location_Center_X,SplitColoniesWithoutGlare|Location_Center_Y,SplitColoniesWithoutGlare|Number_Object_Number,SplitColoniesWithoutGlare|Parent_SplitColoniesWithGlare
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
    Data to export:SplitColoniesWithoutGlare
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
